PsychoPy2experiment version="2023.2.2"
Settings
  Completed URL = https://app.prolific.com/submissions/complete?cc=C1M7OONT
  Experiment info = {'participant': '999', 'designid': '12', 'prolificid': 'xxx', 'Gender': 'F', 'Age': '18'}
  Full-screen window = True
  Incomplete URL = https://umn.qualtrics.com/jfe/form/SV_eX2X12WKLn0nWu2
  Monitor = testMonitor
  Resources = ['Testing_Seq12.xlsx', 'Testing_Seq11.xlsx', 'Testing_Seq10.xlsx', 'Testing_Seq9.xlsx', 'Testing_Seq8.xlsx', 'Testing_Seq7.xlsx', 'Testing_Seq6.xlsx', 'Testing_Seq5.xlsx', 'Testing_Seq4.xlsx', 'Testing_Seq3.xlsx', 'Testing_Seq2.xlsx', 'Testing_Seq1.xlsx', 'Seq_practice.xlsx', 'Seq_keyprac.xlsx', 'RT_Seq12.xlsx', 'RT_Seq11.xlsx', 'RT_Seq10.xlsx', 'RT_Seq9.xlsx', 'RT_Seq8.xlsx', 'RT_Seq7.xlsx', 'RT_Seq6.xlsx', 'RT_Seq5.xlsx', 'RT_Seq4.xlsx', 'RT_Seq3.xlsx', 'RT_Seq2.xlsx', 'RT_Seq1.xlsx', 'MouseEyeCC_Seq12.xlsx', 'MouseEyeCC_Seq11.xlsx', 'MouseEyeCC_Seq10.xlsx', 'MouseEyeCC_Seq9.xlsx', 'MouseEyeCC_Seq8.xlsx', 'MouseEyeCC_Seq7.xlsx', 'MouseEyeCC_Seq6.xlsx', 'MouseEyeCC_Seq5.xlsx', 'MouseEyeCC_Seq4.xlsx', 'MouseEyeCC_Seq3.xlsx', 'MouseEyeCC_Seq2.xlsx', 'MouseEyeCC_Seq1.xlsx', 'T.png', 'instr5_fixagain.png', 'instr2_search.png', 'genMask.m', 'instr4_hidden.png', 'genSequence.m', 'L.png', 'circleMask.png', 'instr1_key.png', 'fixation.png', 'virtual_chinrest.js', 'readme.md', 'plainBackground.png', 'virtual_chinrest.html', 'H.png', 'card.png', 'index.html', 'greenfixation.png', 'styles.css', 'instr3_fix.png']
  Screen = 1
  Units = pix
  Use version = 2023.2.2
  Window size (pixels) = [1470, 956]
  color = $[0, 0, 0]
  expName = MouseEye_withWhitePlaceholder_REP
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine trial
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    CodeComponent code_initial
      Code Type = Auto->JS
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      Begin Experiment:
        # initial letter size
        # letter: 1 degree in CRT (57cm away)
        lettersize = 28;
        # initial aperture size
        aperturesize = 8000;
        # intial search window size
        searchsize = 482;
        searchposY = searchsize/2;

        # initial letter location
        newtlocx = 0;
        newtlocy = 0;
        newd1x = 0;
        newd1y = 0;
        newd2x = 0;
        newd2y = 0;
        newd3x = 0;
        newd3y = 0;
        newd4x = 0;
        newd4y = 0;
        newd5x = 0;
        newd5y = 0;
        newd6x = 0;
        newd6y = 0;
        newd7x = 0;
        newd7y = 0;
        newd8x = 0;
        newd8y = 0;
        newd9x = 0;
        newd9y = 0;
        newd10x = 0;
        newd10y = 0;
        newd11x = 0;
        newd11y = 0;

        # intial hint text location
        hintlocation = 255;
        # initial search hint
        searchHintText = "";

        # initial placeholder opacity
        Topacity = 0;
        L1opacity = 0;
        L2opacity = 0;
        L3opacity = 0;
        L4opacity = 0;
        L5opacity = 0;
        L6opacity = 0;
        L7opacity = 0;
        L8opacity = 0;
        L9opacity = 0;
        L10opacity = 0;
        L11opacity = 0;
      Begin Routine:
        win.mouseVisible = True; # show cursor
        # initial first location to center
        mouselocation = [0, 0];
        whichframe = 0;
        # create empty list to save mouse location
        mouselocationlistx = [];
        mouselocationlisty = [];
        whichframelist = [];

        # search Hint only for practice block
        if phase == 'practice':
            searchHintStartTime = 0;
            # first practice block (block 0)
            if block == 0:
                searchHintText = 'Please find letter T and report its direction';
            else:
                searchHintText = 'Please move your mouse to find letter T';
        else:
            searchHintStartTime = 10000;

        # block 0 is the first prac block (fully visible)
        if block == 0:
            startApertureTime = 10000;
        else:
            startApertureTime = 0;

        # letter size
        lettersize = 28*expInfo['ratio_monitor2CRT'];
        # aperture size
        aperturesize = 8000*expInfo['ratio_monitor2CRT'];
        # rescale search window size
        searchsize = 482*expInfo['ratio_monitor2CRT'];
        searchposY = searchsize/2;

        # rescale letter location
        newtlocx = tlocx * expInfo['ratio_monitor2CRT'];
        newtlocy = tlocy * expInfo['ratio_monitor2CRT'];
        newd1x = d1x * expInfo['ratio_monitor2CRT'];
        newd1y = d1y * expInfo['ratio_monitor2CRT'];
        newd2x = d2x * expInfo['ratio_monitor2CRT'];
        newd2y = d2y * expInfo['ratio_monitor2CRT'];
        newd3x = d3x * expInfo['ratio_monitor2CRT'];
        newd3y = d3y * expInfo['ratio_monitor2CRT'];
        newd4x = d4x * expInfo['ratio_monitor2CRT'];
        newd4y = d4y * expInfo['ratio_monitor2CRT'];
        newd5x = d5x * expInfo['ratio_monitor2CRT'];
        newd5y = d5y * expInfo['ratio_monitor2CRT'];
        newd6x = d6x * expInfo['ratio_monitor2CRT'];
        newd6y = d6y * expInfo['ratio_monitor2CRT'];
        newd7x = d7x * expInfo['ratio_monitor2CRT'];
        newd7y = d7y * expInfo['ratio_monitor2CRT'];
        newd8x = d8x * expInfo['ratio_monitor2CRT'];
        newd8y = d8y * expInfo['ratio_monitor2CRT'];
        newd9x = d9x * expInfo['ratio_monitor2CRT'];
        newd9y = d9y * expInfo['ratio_monitor2CRT'];
        newd10x = d10x * expInfo['ratio_monitor2CRT'];
        newd10y = d10y * expInfo['ratio_monitor2CRT'];
        newd11x = d11x * expInfo['ratio_monitor2CRT'];
        newd11y = d11y * expInfo['ratio_monitor2CRT'];

        # hint text location rescale
        hintlocation = 255*expInfo['ratio_monitor2CRT'];

        # letter opacity
        LetterTopacity = 1;
        LetterL1opacity = 1;
        LetterL2opacity = 1;
        LetterL3opacity = 1;
        LetterL4opacity = 1;
        LetterL5opacity = 1;
        LetterL6opacity = 1;
        LetterL7opacity = 1;
        LetterL8opacity = 1;
        LetterL9opacity = 1;
        LetterL10opacity = 1;
        LetterL11opacity = 1;

        # placeholder opacity
        if phase == 'practice' and block == 0:
            # no placeholder for 1st practice block
            Topacity = 0;
            L1opacity = 0;
            L2opacity = 0;
            L3opacity = 0;
            L4opacity = 0;
            L5opacity = 0;
            L6opacity = 0;
            L7opacity = 0;
            L8opacity = 0;
            L9opacity = 0;
            L10opacity = 0;
            L11opacity = 0;
        else:
            Topacity = 1;
            L1opacity = 1;
            L2opacity = 1;
            L3opacity = 1;
            L4opacity = 1;
            L5opacity = 1;
            L6opacity = 1;
            L7opacity = 1;
            L8opacity = 1;
            L9opacity = 1;
            L10opacity = 1;
            L11opacity = 1;
      End Routine:
        thisExp.addData('letterSize',lettersize);
        thisExp.addData('apertureSize',aperturesize);
        thisExp.addData('searchsize',searchsize);
    ImageComponent imageT
      image = T.png
      interpolate = nearest
      opacity [set every frame] = $LetterTopacity
      ori [set every repeat] = targOrientdeg
      pos [set every repeat] = (newtlocx, newtlocy)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL1
      image = L.png
      interpolate = nearest
      opacity [set every frame] = $LetterL1opacity
      ori [set every repeat] = $d1Orient
      pos [set every repeat] = (newd1x,newd1y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL2
      image = L.png
      interpolate = nearest
      opacity [set every frame] = $LetterL2opacity
      ori [set every repeat] = $d2Orient
      pos [set every repeat] = (newd2x,newd2y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL3
      image = L.png
      interpolate = nearest
      opacity [set every frame] = $LetterL3opacity
      ori [set every repeat] = $d3Orient
      pos [set every repeat] = (newd3x,newd3y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL4
      image = L.png
      interpolate = nearest
      opacity [set every frame] = $LetterL4opacity
      ori [set every repeat] = $d4Orient
      pos [set every repeat] = (newd4x,newd4y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL5
      image = L.png
      interpolate = nearest
      opacity [set every frame] = $LetterL5opacity
      ori [set every repeat] = $d5Orient
      pos [set every repeat] = (newd5x,newd5y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL6
      image = L.png
      interpolate = nearest
      opacity [set every frame] = $LetterL6opacity
      ori [set every repeat] = $d6Orient
      pos [set every repeat] = (newd6x,newd6y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL7
      image = L.png
      interpolate = nearest
      opacity [set every frame] = $LetterL7opacity
      ori [set every repeat] = $d7Orient
      pos [set every repeat] = (newd7x,newd7y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL8
      image = L.png
      interpolate = nearest
      opacity [set every frame] = $LetterL8opacity
      ori [set every repeat] = $d8Orient
      pos [set every repeat] = (newd8x,newd8y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL9
      image = L.png
      interpolate = nearest
      opacity [set every frame] = $LetterL9opacity
      ori [set every repeat] = $d9Orient
      pos [set every repeat] = (newd9x,newd9y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL10
      image = L.png
      interpolate = nearest
      opacity [set every frame] = $LetterL10opacity
      ori [set every repeat] = $d10Orient
      pos [set every repeat] = (newd10x,newd10y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL11
      image = L.png
      interpolate = nearest
      opacity [set every frame] = $LetterL11opacity
      ori [set every repeat] = $d11Orient
      pos [set every repeat] = (newd11x,newd11y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageAperture
      image = plainBackground.png
      mask = circleMask.png
      pos [set every frame] = mouselocation
      size [set every repeat] = (aperturesize, aperturesize)
      startVal [time (s)] = $startApertureTime
      texture resolution = 512
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    ImageComponent CenterAperture
      image = plainBackground.png
      mask = circleMask.png
      pos [set every repeat] = [0, 0]
      size [set every repeat] = (aperturesize, aperturesize)
      startVal [time (s)] = $startApertureTime
      stopVal [duration (frames)] = 1
      texture resolution = 512
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    ImageComponent imageTH
      image = H.png
      interpolate = nearest
      opacity [set every frame] = $Topacity
      pos [set every repeat] = (newtlocx, newtlocy)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL1H
      image = H.png
      interpolate = nearest
      opacity [set every frame] = $L1opacity
      pos [set every repeat] = (newd1x,newd1y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL2H
      image = H.png
      interpolate = nearest
      opacity [set every frame] = $L2opacity
      pos [set every repeat] = (newd2x,newd2y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL3H
      image = H.png
      interpolate = nearest
      opacity [set every frame] = $L3opacity
      pos [set every repeat] = (newd3x,newd3y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL4H
      image = H.png
      interpolate = nearest
      opacity [set every frame] = $L4opacity
      pos [set every repeat] = (newd4x,newd4y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL5H
      image = H.png
      interpolate = nearest
      opacity [set every frame] = $L5opacity
      pos [set every repeat] = (newd5x,newd5y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL6H
      image = H.png
      interpolate = nearest
      opacity [set every frame] = $L6opacity
      pos [set every repeat] = (newd6x,newd6y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL7H
      image = H.png
      interpolate = nearest
      opacity [set every frame] = $L7opacity
      pos [set every repeat] = (newd7x,newd7y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL8H
      image = H.png
      interpolate = nearest
      opacity [set every frame] = $L8opacity
      pos [set every repeat] = (newd8x,newd8y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL9H
      image = H.png
      interpolate = nearest
      opacity [set every frame] = $L9opacity
      pos [set every repeat] = (newd9x,newd9y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL10H
      image = H.png
      interpolate = nearest
      opacity [set every frame] = $L10opacity
      pos [set every repeat] = (newd10x,newd10y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL11H
      image = H.png
      interpolate = nearest
      opacity [set every frame] = $L11opacity
      pos [set every repeat] = (newd11x,newd11y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    PolygonComponent edgeUpper
      fillColor = none
      pos [set every repeat] = (0, searchposY)
      shape = line
      size [set every repeat] = (searchsize, searchsize)
      startVal [time (s)] = 0.0
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    PolygonComponent edgeLower
      fillColor = none
      pos [set every repeat] = (0, -searchposY)
      shape = line
      size [set every repeat] = (searchsize, searchsize)
      startVal [time (s)] = 0.0
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    PolygonComponent edgeRight
      fillColor = none
      ori = 90
      pos [set every repeat] = (searchposY,0)
      shape = line
      size [set every repeat] = (searchsize, searchsize)
      startVal [time (s)] = 0.0
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    PolygonComponent edgeLeft
      fillColor = none
      ori = 90
      pos [set every repeat] = (-searchposY,0)
      shape = line
      size [set every repeat] = (searchsize, searchsize)
      startVal [time (s)] = 0.0
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    TextComponent searchHint
      letterHeight = 24
      pos [set every repeat] = (0, hintlocation)
      saveStartStop = False
      startVal [time (s)] = $searchHintStartTime
      text [set every repeat] = $searchHintText
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    MouseComponent mouseeye
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    KeyboardComponent key_respMain
      allowedKeys = 'a','s'
      correctAns = $corrAnswer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
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    CodeComponent code_end
      Code Type = Auto->JS
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      Each Frame:
        if whichframe >= 1:
            mouselocation = mouseeye.getPos();
        whichframe = whichframe + 1;

        # save mouse location and which frame
        mouselocationlistx.append(mouselocation[0]);
        mouselocationlisty.append(mouselocation[1]);
        whichframelist.append(whichframe);
        thisExp.addData('mouselocationlistx', mouselocationlistx);
        thisExp.addData('mouselocationlisty', mouselocationlisty);
        thisExp.addData('whichframe', whichframelist);

        if phase == 'practice' and block == 0:
            # no placeholder for 1st practice block
            Topacity = 0;
            L1opacity = 0;
            L2opacity = 0;
            L3opacity = 0;
            L4opacity = 0;
            L5opacity = 0;
            L6opacity = 0;
            L7opacity = 0;
            L8opacity = 0;
            L9opacity = 0;
            L10opacity = 0;
            L11opacity = 0;
            # letter opacity
            LetterTopacity = 1;
            LetterL1opacity = 1;
            LetterL2opacity = 1;
            LetterL3opacity = 1;
            LetterL4opacity = 1;
            LetterL5opacity = 1;
            LetterL6opacity = 1;
            LetterL7opacity = 1;
            LetterL8opacity = 1;
            LetterL9opacity = 1;
            LetterL10opacity = 1;
            LetterL11opacity = 1;
        else:
            # remove placeholder (opacity=0) if locating in aperture
            if (pow(newtlocx-mouselocation[0],2) + pow(newtlocy-mouselocation[1],2)) <= pow(expInfo['foveaRadius_inPixel'],2):
                Topacity = 0;
                LetterTopacity = 1;
            else:
                Topacity = 1;
                LetterTopacity = 0;
            if (pow(newd1x-mouselocation[0],2) + pow(newd1y-mouselocation[1],2)) <= pow(expInfo['foveaRadius_inPixel'],2):
                L1opacity = 0;
                LetterL1opacity = 1;
            else:
                L1opacity = 1;
                LetterL1opacity = 0;
            if (pow(newd2x-mouselocation[0],2) + pow(newd2y-mouselocation[1],2)) <= pow(expInfo['foveaRadius_inPixel'],2):
                L2opacity = 0;
                LetterL2opacity = 1;
            else:
                L2opacity = 1;
                LetterL2opacity = 0;
            if (pow(newd3x-mouselocation[0],2) + pow(newd3y-mouselocation[1],2)) <= pow(expInfo['foveaRadius_inPixel'],2):
                L3opacity = 0;
                LetterL3opacity = 1;
            else:
                L3opacity = 1;
                LetterL3opacity = 0;
            if (pow(newd4x-mouselocation[0],2) + pow(newd4y-mouselocation[1],2)) <= pow(expInfo['foveaRadius_inPixel'],2):
                L4opacity = 0;
                LetterL4opacity = 1;
            else:
                L4opacity = 1;
                LetterL4opacity = 0;
            if (pow(newd5x-mouselocation[0],2) + pow(newd5y-mouselocation[1],2)) <= pow(expInfo['foveaRadius_inPixel'],2):
                L5opacity = 0;
                LetterL5opacity = 1;
            else:
                L5opacity = 1;
                LetterL5opacity = 0;
            if (pow(newd6x-mouselocation[0],2) + pow(newd6y-mouselocation[1],2)) <= pow(expInfo['foveaRadius_inPixel'],2):
                L6opacity = 0;
                LetterL6opacity = 1;
            else:
                L6opacity = 1;
                LetterL6opacity = 0;
            if (pow(newd7x-mouselocation[0],2) + pow(newd7y-mouselocation[1],2)) <= pow(expInfo['foveaRadius_inPixel'],2):
                L7opacity = 0;
                LetterL7opacity = 1;
            else:
                L7opacity = 1;
                LetterL7opacity = 0;
            if (pow(newd8x-mouselocation[0],2) + pow(newd8y-mouselocation[1],2)) <= pow(expInfo['foveaRadius_inPixel'],2):
                L8opacity = 0;
                LetterL8opacity = 1;
            else:
                L8opacity = 1;
                LetterL8opacity = 0;
            if (pow(newd9x-mouselocation[0],2) + pow(newd9y-mouselocation[1],2)) <= pow(expInfo['foveaRadius_inPixel'],2):
                L9opacity = 0;
                LetterL9opacity = 1;
            else:
                L9opacity = 1;
                LetterL9opacity = 0;
            if (pow(newd10x-mouselocation[0],2) + pow(newd10y-mouselocation[1],2)) <= pow(expInfo['foveaRadius_inPixel'],2):
                L10opacity = 0;
                LetterL10opacity = 1;
            else:
                L10opacity = 1;
                LetterL10opacity = 0;
            if (pow(newd11x-mouselocation[0],2) + pow(newd11y-mouselocation[1],2)) <= pow(expInfo['foveaRadius_inPixel'],2):
                L11opacity = 0;
                LetterL11opacity = 1;
            else:
                L11opacity = 1;
                LetterL11opacity = 0;
      End Routine:
        mouselocation = [0, 0];
        if key_respMain.corr == 1:
            fbtext = 'correct!'
            fbcolor = 'green';
            fbdur = .2;
        else:
            fbtext = 'incorrect!'
            fbcolor = 'red';
            fbdur = 2;
  Routine trialFeedback
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    TextComponent textFeedback
      color [set every repeat] = $fbcolor
      letterHeight = 32
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbdur
      text [set every repeat] = $fbtext
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  Routine EndOfExperiment
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    TextComponent textEnd
      letterHeight = 24
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        You are all done! Thank you for doing the experiment.

        To obtain REP points, please wait until you can click [OK] button. You will then be directed to fill in your x500.
  Routine TakeABreak
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    CodeComponent code_break
      Code Type = Auto->JS
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      Begin Experiment:
        sumcorr = 0;
        avgcorr = 0;
        sumrt = 0;
        avgrt = 0;
        accfbcolor = 'white';
        rtfbcolor = 'white';
        accfbtext = "na";
        rtfbtext = "na";
      Begin Routine:
        remainingblock = 24-block;
        breakTime = 16;
          # take a break for every block
        if trial % breakTime == 0:
            continueRoutine = True;
            sumcorr = sumcorr + key_respMain.corr;
            sumrt = sumrt + key_respMain.rt;
            avgcorr = 100*(sumcorr/breakTime);
            avgrt = sumrt/breakTime;
            if avgcorr > 90:
                accfbcolor = 'green';
                accfbtext = "Your accuracy during the last block was " + str(round(avgcorr,2)) + "%. Good job!";
            else:
                accfbcolor = 'red';
                accfbtext = "Your accuracy during the last block was only " + str(round(avgcorr,2)) + "%. Please try to be accurate.";
            if avgrt < 4.0:
                rtfbcolor = 'green';
                rtfbtext = "It took you an average of " + str(round(avgrt,2)) + "s to respond to the letter T. Good job!";
            else:
                rtfbcolor = 'red';
                rtfbtext = "It took you an average of " + str(round(avgrt,2)) + "s to respond to the letter T. Please try to be faster.";
            sumcorr = 0;
            sumrt = 0;
        else:
            sumcorr = sumcorr + key_respMain.corr;
            sumrt = sumrt + key_respMain.rt;
            continueRoutine = False;
        # no break instruction for last block
        if remainingblock == 0:
            continueRoutine = False;
    TextComponent acctext
      color [set every repeat] = $accfbcolor
      letterHeight = 24
      pos = (0, 120)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $accfbtext
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    TextComponent rttext
      color [set every repeat] = $rtfbcolor
      letterHeight = 24
      pos = (0, 60)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $rtfbtext
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    TextComponent textBreak
      letterHeight = 24
      pos = (0, -50)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        There are 24 blocks altogether. The number of remaining blocks is:


        Press spacebar to continue.
    TextComponent textBlockRemaining
      letterHeight = 24
      pos [set every frame] = (0, -65)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $remainingblock
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    KeyboardComponent key_respBreak
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine practiceEnd
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    CodeComponent code_endPrac
      Code Type = Auto->JS
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      Begin Experiment:
        sumaccprac = 0;
      End Routine:
        sumaccprac = sumaccprac + key_respMain.corr;
        if sumaccprac >= 12:
            trialsPractice.finished= True
  Routine CheckInstr
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    TextComponent text_checkInstr
      letterHeight = 24
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        End of practice. To make sure you understand the instructions, we have a question for you.

        Now suppose the tip of letter T points toward left, like this:







        Which button will your press?

        Press A or S key to respond.
    ImageComponent checkIntr_example
      image = T.png
      interpolate = nearest
      saveStartStop = False
      size = (60, 60)
      startVal [time (s)] = 0
      texture resolution = 512
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    KeyboardComponent key_checkInstr
      allowedKeys = 'a','s'
      correctAns = a
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      storeCorrect = True
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    CodeComponent code_checkIntr
      Code Type = Auto->JS
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      End Routine:
        if key_checkInstr.corr == 1:
            fbtext_checkInstr = 'Correct! Press A key when the tip of T is facing left.';
        else:
            fbtext_checkInstr = 'Incorrect! Press A key when the tip of T is facing left.';
  Routine Instruction1
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    ImageComponent instr1_key
      image = instr1_key.png
      interpolate = nearest
      saveStartStop = False
      size = (641,488)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_instr1key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine Instruction2
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    ImageComponent instr2_search
      image = instr2_search.png
      interpolate = nearest
      saveStartStop = False
      size = (594,465)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_instr2search
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine Instruction_MainExp
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    TextComponent InstrMainExp
      letterHeight = 24
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Now we begin the real experiment!

        The task is the same as the practice you just did: click the white dot to start, then move your mouse around to find letter T. This experiment takes about 50 minutes. There are 24 blocks. At the end of each block, you will see your response accuracy and can take a short break. At some point the visual restriction will be removed!

        Please respond as accurately and quickly as possible, and try to keep the same pose during experiment.

        Ready? Press spacebar to start!
    KeyboardComponent key_InstrMainExp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine VirtualChinrest
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    CodeComponent skip_offline
      Code Type = Py
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      Begin Routine:
        #skip this component offline
        continueRoutine = False
    TextComponent loading
      letterHeight = 24
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Loading......
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    CodeComponent iframe
      Code Type = JS
      Begin JS Routine:
        // This routine should not start straight away or the screen width and height
        // may be incorrect.

        expInfo['xRes'] = screen.width;
        expInfo['yRes'] = screen.height;
        expInfo['viewportX'] = window.innerWidth;
        expInfo['viewportY'] = window.innerHeight;

        //let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);
        let src = ('virtual_chinrest.html');

        continue_routine = true; // Routines can't be ended from within Begin Routine
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto; overflow-x: hidden; overflow-y: scroll !important; -webkit-overflow-y-scrolling:touch !important;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: hidden; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%; overflow-y: hidden; overflow-x: hidden; "></iframe></div></div></div>');
            $('#iframe').on('load',function(iframe){
                // Auto-adjust iframe size:
                $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                $('#iframe-o').height($(window).height()-20, true);
                $('#iframe-m').width($(this).contents().find('html').width()+100);
                $('#iframe-i').height ( Math.max ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                $(this).height($(this).contents().find('html').height());
                $('#iframe-o').css('visibility','visible');

                //if click submit button in a form:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();

                    //expose the iframe to the window
                    var iframe = $('#iframe');
                    window.iframe = iframe;
                    // save viewing distance in cm, pixel density (how many pixels per mm, px2mm)
                    // save Ball Position (px), Square Position (px)
                    expInfo['viewingdistance_cm'] = iframe[0].contentWindow.document.getElementById("info-h").innerText;
                    expInfo['pixeldensity_px2mm'] = iframe[0].contentWindow.document.getElementById("info-lpd").innerText;
                    expInfo['BallPos'] = iframe[0].contentWindow.document.getElementById("info-BallPos").innerText;
                    expInfo['squarePos'] = iframe[0].contentWindow.document.getElementById("info-squarePos").innerText;

                    // Remove iframe and continue to next routine when done:
                    $('#iframe-o').remove();
                    continue_routine = false;
                });

            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        // continue until button pressed
        continueRoutine = continue_routine;
      End JS Routine:
        // Using virtual Chinrest Results (viewing distance, pixel density) to estimate pixel per degree:
        // how many mm per degree
        expInfo['mm2degree'] = Math.tan(Math.PI/180) * (Number.parseFloat(expInfo['viewingdistance_cm']) * 10);
        // how many pixel per degree
        expInfo['px2degree'] = Number.parseFloat(expInfo['pixeldensity_px2mm']) * Number.parseFloat(expInfo['mm2degree']);

        // if testing in Lab CRT with 36.6 cm height, 1024x768 resolution, and 57cm viewing distance:
        // then 2.79 pixel per mm, 27.83 pixel per degree
        // CRT_pixeldensity_px2mm = 1024/366;
        // CRT_mm2degree = (Math.tan(Math.PI/180) * (57 * 10));
        // CRT_px2degree = (CRT_pixeldensity_px2mm  * CRT_mm2degree);
        expInfo['CRT_px2degree'] = 1024/366 * (Math.tan(Math.PI/180) * 57 * 10);

        // ratio between Lab CRT and online participant's monitor:
        // ratio_monitor2CRT = px2degree/CRT_px2degree;
        expInfo['ratio_monitor2CRT'] = Number.parseFloat(expInfo['px2degree'])/Number.parseFloat(expInfo['CRT_px2degree']);

        // To show whole search range 480x480 pixels on current windown size 1920x1080 and 1366x768 pixels (most common resolution)
        // the max ratio_monitor should be 768/(480+24), 480 px search range, 24 px instructions
        expInfo['maxratio'] = expInfo['viewportY']/504

        // if redo virtual chinrest still provide a ratio higher than 1.6 (window size 768/ search range 480), just use 1.6 to continue:
        if ((expInfo["ratio_monitor2CRT"] <= expInfo['maxratio'])) {
            expInfo['PassVirtualChinrest'] = "Passed";
        }
        if ((expInfo["ratio_monitor2CRT"] > expInfo['maxratio'])) {
            expInfo['PassVirtualChinrest'] = "Failed";
        }

        // size of central fovea (6.7 degree in diameter, so radius should be 6.7/2)
        expInfo['foveaRadius_inPixel'] = Number.parseFloat(expInfo['px2degree'])*6.7/2;
  Routine keyPractice
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    CodeComponent code_keyprac
      Code Type = Auto->JS
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      Begin Experiment:
        # intial hint text location
        hintlocation = 255;
      Begin Routine:
        # hint text location rescale
        hintlocation = 255*expInfo['ratio_monitor2CRT'];
      End Routine:
        if key_keyprac.corr == 1:
            keyprac_fbtext = 'correct!'
            keyprac_fbcolor = 'green';
            keyprac_fbdur = .5;
        else:
            keyprac_fbtext = 'incorrect!'
            keyprac_fbcolor = 'red';
            keyprac_fbdur = .5;
    PolygonComponent fixation_keyprac
      fillColor = white
      saveStartStop = False
      shape = circle
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent letterT
      image = T.png
      interpolate = nearest
      ori [set every repeat] = targOrientdeg
      saveStartStop = False
      size = (80, 80)
      startVal [time (s)] = 0.5
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    TextComponent keyHint
      letterHeight = 24
      pos [set every repeat] = (0, hintlocation)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = A key (tip of T facing left), S key (facing right)
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    KeyboardComponent key_keyprac
      allowedKeys = 'a','s'
      correctAns = $corrAnswer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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  Routine keyPracFeedback
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    TextComponent keyFeedback
      color [set every repeat] = $keyprac_fbcolor
      letterHeight = 32
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $keyprac_fbdur
      text [set every repeat] = $keyprac_fbtext
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    CodeComponent code_endkeyprac
      Code Type = Auto->JS
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      Begin Experiment:
        sumaccKeyPrac = 0;
      End Routine:
        sumaccKeyPrac = sumaccKeyPrac + key_keyprac.corr;
        if sumaccKeyPrac >= 5:
            keyPracLoop.finished= True
  Routine KeyPracInstr
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    TextComponent keyPracInstruction
      letterHeight = 24
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Now let's do some practice.

        Remember press A key when the tip of letter T is facing left, S key when the tip of letter T is pointing right.

        Press spacebar to start a short practice.
    KeyboardComponent keyPracInstr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine EndKeyPrac
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    TextComponent EndKeyPracInstr
      letterHeight = 24
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Good job! Now we will do the visual search task.

        Press spacebar to continue (more instruction on the next page).
    KeyboardComponent Key_continueInstr
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine redoChinrest_instr
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    CodeComponent skip_offline_redo_2
      Code Type = Py
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      Begin Routine:
        #skip this component offline
        continueRoutine = False
    CodeComponent skip_redo_2
      Code Type = JS
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      Begin JS Routine:
        // To show whole search range 600x600 pixels on current windown size 1920x1080 and 1366x768 pixels (most common resolution)
        // the max ratio_monitor should be 768/600= 1.28

        // if ratio is acceptance, then skip redo virutal chinrest
        if ((expInfo["ratio_monitor2CRT"] < 1.28)) {
            continueRoutine = false;
        }
    TextComponent redo_instr
      letterHeight = 24
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Just now, you might sit too far away from your screen.


        Please try to sit closer to your screen and try again! When you are ready, press spacebar to start.
    MouseComponent mouse_redoinstr
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine InstrStartPage
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    CodeComponent StartPage_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Age Restrictions
        if (int(expInfo['Age']) < 18 or int(expInfo['Age']) > 45):
            core.quit()

        # design (rich quadrant)
        design = int(expInfo['designid']);
        parameterfile = 'MouseEyeCC_Seq'+str(design)+'.xlsx';
        testingfile = 'Testing_Seq'+str(design)+'.xlsx';
        rtfile = 'RT_Seq'+str(design)+'.xlsx';
        # fake parameter for local testing:
        expInfo['ratio_monitor2CRT'] = 1;
    TextComponent InstrStartPage_text
      letterHeight = 24
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to our study!

        This study requires about 60 minutes of uninterrupted time. Please choose a comfortable pose and try to keep the same pose during experiment.

        We will first find out your monitor size, how far away you are sitting. Then you will do a visual search task.

        Press the spacebar to start when you are ready.
    KeyboardComponent InstrStartPage_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruction3
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    ImageComponent instr3_fix
      image = instr3_fix.png
      interpolate = nearest
      saveStartStop = False
      size = (501,234)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_instr3fix
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine fixation
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    CodeComponent code_fixinitial
      Code Type = Auto->JS
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      Begin Experiment:
        # initial fixation size
        fixsize = 28
        # intial hint text location
        hintlocation = 255;
        # progress bar
        barW = 0;
        barX = 0;
        barY = 0;
      Begin Routine:
        win.mouseVisible = True; # show cursor
        # fixation Hint
        if phase == 'practice':
            fixationStartTime = 4;
        else:
            fixationStartTime = 10000;
        # show mouse
        win.mouseVisible = True;
        # fixation size rescale
        fixsize = 28*expInfo['ratio_monitor2CRT'];
        # hint text location rescale
        hintlocation = 255*expInfo['ratio_monitor2CRT'];

        # progress bar
        if phase == "practice":
            ntrial = 8;
        else:
            ntrial = 16;

        barW = trial*1024/(ntrial);
        barX = -0.5*1024+0.5*barW;
        barY = -0.5*768*expInfo['ratio_monitor2CRT'];
        if (768*expInfo['ratio_monitor2CRT']) > expInfo['viewportY']:
            barY = -0.5*expInfo['viewportY'];
      End Routine:
        mouselocation = [0, 0];
        thisExp.addData('fixationSize',fixsize)
    PolygonComponent backgroundBar
      fillColor = gray
      pos [set every repeat] = (0, barY)
      saveStartStop = False
      shape = rectangle
      size = (1024, 3)
      startVal [time (s)] = 0.0
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    PolygonComponent progressbar
      fillColor = white
      pos [set every repeat] = (barX, barY)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (barW, 3)
      startVal [time (s)] = 0.0
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    ImageComponent fixationPoint
      image = fixation.png
      interpolate = nearest
      saveStartStop = False
      size [set every repeat] = (fixsize, fixsize)
      startVal [time (s)] = 0.0
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    TextComponent fixationHint
      letterHeight = 24
      pos [set every repeat] = (0, hintlocation)
      saveStartStop = False
      startVal [time (s)] = $fixationStartTime
      text = please click the white dot in the center to start.
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    MouseComponent mouseintial
      clickable = fixationPoint
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
      syncScreenRefresh = True
      timeRelativeTo = routine
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  Routine Instruction5
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    CodeComponent code_pracBreak_2
      Code Type = Auto->JS
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      Begin Routine:
        continueRoutine = False;
        # Instruction before 2nd prac block - restricted view
        if block==0 and trial==8:
            continueRoutine = True;
    ImageComponent instr5_fixagain
      image = instr5_fixagain.png
      interpolate = nearest
      saveStartStop = False
      size = (609,351)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_instr5fixagain
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine Instruction4
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    CodeComponent code_pracBreak
      Code Type = Auto->JS
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      Begin Routine:
        continueRoutine = False;
        # Instruction before 2nd prac block - restricted view
        if block==0 and trial==8:
            continueRoutine = True;
    ImageComponent instr4_hidden
      image = instr4_hidden.png
      interpolate = nearest
      saveStartStop = False
      size = (648,518)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_instr4hidden
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine CheckInstr_FB
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    TextComponent feedback_CheckInstr1
      letterHeight = 24
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $fbtext_checkInstr
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    TextComponent feedback_CheckInstr2
      letterHeight = 24
      pos = (0, -70)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please press spacebar to continue.
    KeyboardComponent key_feedbackCheckInstr
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine EvenDistribution
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    TextComponent RecognitionTest1
      letterHeight = 24
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have just finished the search task. Here are several questions for you.


        Q. Was the location of the target evenly distributed on the display?

        If you think the target location was evenly distributed, press E.
        If you think that the target location was unevenly distributed, press U.
    KeyboardComponent recognitionResp1
      allowedKeys = 'e', 'u'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine RichQGuess1
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    TextComponent RichQGuess1_txt
      letterHeight = 24
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Q. Actually, the target was more frequently presented in one quadrant. Which quadrant do you think was most likely to be that quadrant?

        A. upper left quadrant
        B. upper right quadrant
        C. lower left quadrant
        D. lower right quadrant

        Press A, B, C, or D key to respond.
    KeyboardComponent RichQGuess1_key
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine RichQGuess2
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    CodeComponent code_RichQGuess2
      Code Type = Auto->JS
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      Begin Routine:
        if RichQGuess1_key.keys == 'a':
            RichQGuessInstr = "B. upper right quadrant \nC. lower left quadrant \nD. lower right quadrant \n\nPress B, C, or D key to respond.";
        if RichQGuess1_key.keys == 'b':
            RichQGuessInstr = "A. upper left quadrant \nC. lower left quadrant \nD. lower right quadrant \n\nPress A, C, or D key to respond.";
        if RichQGuess1_key.keys == 'c':
            RichQGuessInstr = "A. upper left quadrant \nB. upper right quadrant \nD. lower right quadrant \n\nPress A, B, or D key to respond.";
        if RichQGuess1_key.keys == 'd':
            RichQGuessInstr = "A. upper left quadrant \nB. upper right quadrant \nC. lower left quadrant \n\nPress A, B, or C key to respond.";
    TextComponent RichQGuess2_txta
      letterHeight = 24
      pos = (0, 100)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Q. Except the quadrant you just chose, which quadrant do you think was the second most likely quadrant?
    TextComponent RichQGuess2_txtb
      letterHeight = 24
      pos = (0, -25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $RichQGuessInstr
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    KeyboardComponent RichQGuess2_key
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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  Routine RichQGuess3
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    CodeComponent code_RichQGuess3
      Code Type = Auto->JS
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      Begin Routine:
        if RichQGuess1_key.keys == 'a':
            if RichQGuess2_key.keys == 'b':
                RichQGuessInstr = "C. lower left quadrant \nD. lower right quadrant \n\nPress C or D key to respond.";
            if RichQGuess2_key.keys == 'c':
                RichQGuessInstr = "B. upper right quadrant \nD. lower right quadrant \n\nPress B or D key to respond.";
            if RichQGuess2_key.keys == 'd':
                RichQGuessInstr = "B. upper right quadrant \nC. lower left quadrant \n\nPress B or C key to respond.";
        if RichQGuess1_key.keys == 'b':
            if RichQGuess2_key.keys == 'a':
                RichQGuessInstr = "C. lower left quadrant \nD. lower right quadrant \n\nPress C or D key to respond.";
            if RichQGuess2_key.keys == 'c':
                RichQGuessInstr = "A. upper left quadrant \nD. lower right quadrant \n\nPress A or D key to respond.";
            if RichQGuess2_key.keys == 'd':
                RichQGuessInstr = "A. upper left quadrant \nC. lower left quadrant \n\nPress A or C key to respond.";
        if RichQGuess1_key.keys == 'c':
            if RichQGuess2_key.keys == 'a':
                RichQGuessInstr = "B. upper right quadrant \nD. lower right quadrant \n\nPress B or D key to respond.";
            if RichQGuess2_key.keys == 'b':
                RichQGuessInstr = "A. upper left quadrant \nD. lower right quadrant \n\nPress A or D key to respond.";
            if RichQGuess2_key.keys == 'd':
                RichQGuessInstr = "A. upper left quadrant \nB. upper right quadrant \n\nPress A or B key to respond.";
        if RichQGuess1_key.keys == 'd':
            if RichQGuess2_key.keys == 'a':
                RichQGuessInstr = "B. upper right quadrant \nC. lower left quadrant \n\nPress B or C key to respond.";
            if RichQGuess2_key.keys == 'b':
                RichQGuessInstr = "A. upper left quadrant \nC. lower left quadrant \n\nPress A or C key to respond.";
            if RichQGuess2_key.keys == 'c':
                RichQGuessInstr = "A. upper left quadrant \nB. upper right quadrant \n\nPress A or B key to respond.";
    TextComponent RichQGuess3_txta
      letterHeight = 24
      pos = (0, 100)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Q. Except the two quadrants you just chose, which quadrant do you think was the third most likely quadrant?
    TextComponent RichQGuess3_txtb
      letterHeight = 24
      pos = (0, -25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $RichQGuessInstr
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    KeyboardComponent RichQGuess3_key
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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  Routine RichQGuess4
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  Routine InstrRedo
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    CodeComponent skip_offline_redoInstr
      Code Type = Py
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      Begin Routine:
        #skip this component offline
        continueRoutine = False
    CodeComponent code_RedoInstr
      Code Type = Auto->JS
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      Begin Routine:
        # if ratio is higher than the maximum ratio, redo virtual chinrest
        continueRoutine = False;
        if expInfo['ratio_monitor2CRT'] > expInfo['maxratio']:
            continueRoutine = True;
    TextComponent InstrRedo_txt
      letterHeight = 28
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You might be sitting too far away. Please sit closer to your screen. And make sure your browser window is maximized.

        We will find out your current distance. When you are ready, press spacebar to continue.
    KeyboardComponent InstrRedo_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine VirtualChinrestRedo
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    CodeComponent skip_offline_Redo
      Code Type = Py
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      Begin Routine:
        #skip this component offline
        continueRoutine = False
    CodeComponent code_Redo
      Code Type = Auto->JS
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      Begin Routine:
        # if ratio is higher than the maximum ratio, redo virtual chinrest
        continueRoutine = False;
        if expInfo['ratio_monitor2CRT'] > expInfo['maxratio']:
            continueRoutine = True;
      Each Frame:
        if expInfo['ratio_monitor2CRT'] > expInfo['maxratio']:
            continueRoutine = continue_routine;
    TextComponent loadingRedo_txt
      letterHeight = 24
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Loading......
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    CodeComponent iframeRedo
      Code Type = JS
      Begin JS Routine:
        // skip if ratio is under max ratio:
        if ((expInfo["ratio_monitor2CRT"] > expInfo['maxratio'])) {

            // This routine should not start straight away or the screen width and height
            // may be incorrect.

            expInfo['xRes'] = screen.width;
            expInfo['yRes'] = screen.height;

            //let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);
            let src = ('virtual_chinrest.html');

            continue_routine = true; // Routines can't be ended from within Begin Routine
            $(document).ready(function() {
                // Add custom contents from html file using an iframe:
                $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto; overflow-x: hidden; overflow-y: scroll !important; -webkit-overflow-y-scrolling:touch !important;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: hidden; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%; overflow-y: hidden; overflow-x: hidden; "></iframe></div></div></div>');
                $('#iframe').on('load',function(iframe){
                    // Auto-adjust iframe size:
                    $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                    $('#iframe-o').height($(window).height()-20, true);
                    $('#iframe-m').width($(this).contents().find('html').width()+100);
                    $('#iframe-i').height ( Math.max ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                    $(this).height($(this).contents().find('html').height());
                    $('#iframe-o').css('visibility','visible');

                    //if click submit button in a form:
                    $(this).contents().find('form').on('submit',function(e){
                        e.preventDefault();

                        //expose the iframe to the window
                        var iframe = $('#iframe');
                        window.iframe = iframe;
                        // save viewing distance and pixel per mm into output file:
                        expInfo['viewingdistance_cm'] = iframe[0].contentWindow.document.getElementById("info-h").innerText;
                        expInfo['pixeldensity_px2mm'] = iframe[0].contentWindow.document.getElementById("info-lpd").innerText;
                        expInfo['BallPos'] = iframe[0].contentWindow.document.getElementById("info-BallPos").innerText;
                        expInfo['squarePos'] = iframe[0].contentWindow.document.getElementById("info-squarePos").innerText;

                        // Remove iframe and continue to next routine when done:
                        $('#iframe-o').remove();
                        continue_routine = false;
                    });
                });
            });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );

        }
      Each JS Frame:
        // skip if ratio is under max ratio:
        if ((expInfo["ratio_monitor2CRT"] > expInfo['maxratio'])) {
            // continue until button pressed
            continueRoutine = continue_routine;
        }
      End JS Routine:
        // Using virtual Chinrest Results (viewing distance, pixel density) to estimate pixel per degree:
        // how many mm per degree
        expInfo['mm2degree'] = Math.tan(Math.PI/180) * (Number.parseFloat(expInfo['viewingdistance_cm']) * 10);
        // how many pixel per degree
        expInfo['px2degree'] = Number.parseFloat(expInfo['pixeldensity_px2mm']) * Number.parseFloat(expInfo['mm2degree']);

        // if testing in Lab CRT with 36.6 cm height, 1024x768 resolution, and 57cm viewing distance:
        // then 2.79 pixel per mm, 27.83 pixel per degree
        // CRT_pixeldensity_px2mm = 1024/366;
        // CRT_mm2degree = (Math.tan(Math.PI/180) * (57 * 10));
        // CRT_px2degree = (CRT_pixeldensity_px2mm  * CRT_mm2degree);
        expInfo['CRT_px2degree'] = 1024/366 * (Math.tan(Math.PI/180) * 57 * 10);

        // ratio between Lab CRT and online participant's monitor:
        // ratio_monitor2CRT = px2degree/CRT_px2degree;
        expInfo['ratio_monitor2CRT'] = Number.parseFloat(expInfo['px2degree'])/Number.parseFloat(expInfo['CRT_px2degree']);

        // To show whole search range 480x480 pixels on current windown size 1920x1080 and 1366x768 pixels (most common resolution)
        // the max ratio_monitor should be 768/(480+24), expInfo['maxratio'] = yRes/504

        // if redo virtual chinrest still provide a ratio higher than maxratio, just use maxratio to continue:
        if ((expInfo["ratio_monitor2CRT"] <= expInfo['maxratio'])) {
            expInfo['PassVirtualChinrest'] = "Passed";
        }
        if ((expInfo["ratio_monitor2CRT"] > expInfo['maxratio'])) {
            expInfo['ratio_monitor2CRT'] = expInfo['maxratio'];
            expInfo['PassVirtualChinrest'] = "Failed";
        }

        // size of central fovea (6.7 degree in diameter, so radius should be 6.7/2)
        expInfo['foveaRadius_inPixel'] = Number.parseFloat(expInfo['px2degree'])*6.7/2;
  Routine greenFixation
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    CodeComponent code_fixinitial_2
      Code Type = Auto->JS
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      Begin Experiment:
        # initial fixation size
        fixsize = 28
        # intial hint text location
        hintlocation = 255;
        # progress bar
        barW = 0;
        barX = 0;
        barY = 0;
      Begin Routine:
        win.mouseVisible = True; # show cursor
        # fixation Hint
        if phase == 'practice':
            fixationStartTime = 4;
        else:
            fixationStartTime = 10000;
        # show mouse
        win.mouseVisible = True;
        # fixation size rescale
        fixsize = 28*expInfo['ratio_monitor2CRT'];
        # hint text location rescale
        hintlocation = 255*expInfo['ratio_monitor2CRT'];
        # progress bar
        if phase == "practice":
            ntrial = 8;
        else:
            ntrial = 16;

        barW = trial*1024/(ntrial);
        barX = -0.5*1024+0.5*barW;
        barY = -0.5*768*expInfo['ratio_monitor2CRT'];
        if (768*expInfo['ratio_monitor2CRT']) > expInfo['viewportY']:
            barY = -0.5*expInfo['viewportY'];
      End Routine:
        mouselocation = [0, 0];
    ImageComponent fixationPoint_2
      image = greenfixation.png
      interpolate = nearest
      saveStartStop = False
      size [set every repeat] = (fixsize, fixsize)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent backgroundBar_2
      fillColor = gray
      pos [set every repeat] = (0, barY)
      saveStartStop = False
      shape = rectangle
      size = (1024, 3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
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    PolygonComponent progressbar_2
      fillColor = white
      pos [set every repeat] = (barX, barY)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (barW, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine MouseDevice
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    TextComponent DeviceQ
      letterHeight = 24
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        How did you control the mouse cursor movements to find the letter T during the experiment?


        A. computer mouse
        B. touchpad
        C. touch screen

        Press A, B, or C key to respond.
    KeyboardComponent DeviceQKey
      allowedKeys = 'a', 'b', 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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  Routine Handedness
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    TextComponent handednesstxt
      letterHeight = 24
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Are you left-handed or right-handed? or do you use both hands equally?


        A. left-handed
        B. right-handed
        C. use both hands equally

        Press A, B, or C key to respond.
    KeyboardComponent handednessKey
      allowedKeys = 'a', 'b', 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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  Routine Strategy
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    TextComponent strategy_txt
      letterHeight = 24
      pos = (0, 100)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        What Strategies, if any, did you use to help you find the target letter T?
    TextboxComponent strategyReport
      bold = False
      color = black
      editable = True
      letterHeight = 24
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 1
      text = please type in here...
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    ButtonComponent StrategyButton
      bold = True
      borderColor = white
      forceEndRoutine = True
      letterHeight = 24
      pos = (0, -200)
      save = none
      saveStartStop = False
      size = (250,30)
      startVal [time (s)] = 3
      text = Click to continue!
      timeRelativeTo = experiment
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  Routine fixation_2
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    CodeComponent code_fixinitial_3
      Code Type = Auto->JS
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      Begin Experiment:
        # initial fixation size
        fixsize = 28
        # intial hint text location
        hintlocation = 255;
        # progress bar
        barW = 0;
        barX = 0;
        barY = 0;
      Begin Routine:
        win.mouseVisible = True; # show cursor
        # fixation Hint
        if phase == 'practice':
            fixationStartTime = 4;
        else:
            fixationStartTime = 10000;
        # show mouse
        win.mouseVisible = True;
        # fixation size rescale
        fixsize = 28*expInfo['ratio_monitor2CRT'];
        # hint text location rescale
        hintlocation = 255*expInfo['ratio_monitor2CRT'];

        # progress bar
        if phase == "practice":
            ntrial = 8;
        else:
            if block == 1:
                ntrial = 24;
            else:
                ntrial = 72;
        barW = trial*1024/(ntrial);
        barX = -0.5*1024+0.5*barW;
        barY = -0.5*768*expInfo['ratio_monitor2CRT'];
        if (768*expInfo['ratio_monitor2CRT']) > expInfo['viewportY']:
            barY = -0.5*expInfo['viewportY'];
      End Routine:
        mouselocation = [0, 0];
        thisExp.addData('fixationSize',fixsize)
    PolygonComponent backgroundBar_3
      fillColor = gray
      pos [set every repeat] = (0, barY)
      saveStartStop = False
      shape = rectangle
      size = (1024, 3)
      startVal [time (s)] = 0.0
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    PolygonComponent progressbar_3
      fillColor = white
      pos [set every repeat] = (barX, barY)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (barW, 3)
      startVal [time (s)] = 0.0
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    ImageComponent fixationPoint_3
      image = fixation.png
      interpolate = nearest
      saveStartStop = False
      size [set every repeat] = (fixsize, fixsize)
      startVal [time (s)] = 0.0
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    TextComponent fixationHint_2
      letterHeight = 24
      pos [set every repeat] = (0, hintlocation)
      saveStartStop = False
      startVal [time (s)] = $fixationStartTime
      text = please click the white dot in the center to start.
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    MouseComponent mouseintial_2
      clickable = fixationPoint
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
      syncScreenRefresh = True
      timeRelativeTo = routine
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  Routine RecogQuestion
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    TextComponent Ques_text
      letterHeight = 24
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Thank you for completing the experiment! Here is a question for you.

        During the experiment, did you notice that some displays are repeatedly presented across blocks?

        Please press Y for yes, N for no if you did not notice any repeated displays.
    KeyboardComponent key_AnswerQues
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = first key
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  Routine Disclose
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    TextComponent Disclose_text
      letterHeight = 24
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for your answer.

        In fact, some displays are repeatedly presented across blocks in the experiment!

        Press spacebar to continue.
    KeyboardComponent continue_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine InstrRT_2
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    TextComponent InstrRecognitionTest_2
      letterHeight = 24
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        At the end, your task is to indicate whether you have seen the following displays during the course of the experiment or not.

        Please respond as accurately as possible by using the Y key (Yes I have) and N key (No I have not).

        Ready? Press spacebar to start!
    KeyboardComponent InstrRecognitionTest_key_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine fixation_RT
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    CodeComponent code_RTfix
      Code Type = Auto->JS
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      Begin Experiment:
        # initial fixation size
        fixsize = 28
        # intial hint text location
        hintlocation = 255;
      Begin Routine:
        win.mouseVisible = True; # show cursor
        # fixation Hint: show it through the way
        if phase == 'rt':
            fixationStartTime = 0;
        else:
            fixationStartTime = 0;
        # show mouse
        win.mouseVisible = True;
        # fixation size rescale
        fixsize = 28*expInfo['ratio_monitor2CRT'];
        # hint text location rescale
        hintlocation = 255*expInfo['ratio_monitor2CRT'];
      End Routine:
        mouselocation = [0, 0];
        thisExp.addData('fixationSize',fixsize)
    ImageComponent fixation_image
      image = fixation.png
      interpolate = nearest
      saveStartStop = False
      size [set every repeat] = (fixsize, fixsize)
      startVal [time (s)] = 0.0
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    TextComponent fixationHint_text
      letterHeight = 24
      pos [set every repeat] = (0, hintlocation)
      saveStartStop = False
      startVal [time (s)] = $fixationStartTime
      text = please click the white dot in the center to start.
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    MouseComponent mouseInitial
      clickable = fixationPoint
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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  Routine displayRT
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    CodeComponent code_initial_2
      Code Type = Auto->JS
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      Begin Experiment:
        # initial letter size
        # letter: 1 degree in CRT (57cm away)
        lettersize = 28;
        # initial aperture size
        aperturesize = 8000;
        # intial search window size
        searchsize = 482;
        # initial letter location
        newtlocx = 0;
        newtlocy = 0;
        newd1x = 0;
        newd1y = 0;
        newd2x = 0;
        newd2y = 0;
        newd3x = 0;
        newd3y = 0;
        newd4x = 0;
        newd4y = 0;
        newd5x = 0;
        newd5y = 0;
        newd6x = 0;
        newd6y = 0;
        newd7x = 0;
        newd7y = 0;
        newd8x = 0;
        newd8y = 0;
        newd9x = 0;
        newd9y = 0;
        newd10x = 0;
        newd10y = 0;
        newd11x = 0;
        newd11y = 0;
        # intial hint text location
        hintlocation = 255;
      Begin Routine:
        win.mouseVisible = True; # show cursor
        # initial first location to center
        mouselocation = [0, 0];
        whichframe = 0;
        # create empty list to save mouse location
        mouselocationlistx = [];
        mouselocationlisty = [];
        whichframelist = [];


        startApertureTime = 10000;

        # search Hint for RT task
        if phase == 'rt':
            searchHintStartTime = 0;
            # first practice block (block 0)
            if block == 0:
                searchHintText = 'Indicate whether you have seen it by Y or N';
            else:
                searchHintText = 'Indicate whether you have seen it by Y or N';
        else:
            searchHintStartTime = 10000;


        # letter size
        lettersize = 28*expInfo['ratio_monitor2CRT'];
        # aperture size
        aperturesize = 8000*expInfo['ratio_monitor2CRT'];
        # rescale search window size
        searchsize = 482*expInfo['ratio_monitor2CRT'];
        # rescale letter location
        newtlocx = tlocx * expInfo['ratio_monitor2CRT'];
        newtlocy = tlocy * expInfo['ratio_monitor2CRT'];
        newd1x = d1x * expInfo['ratio_monitor2CRT'];
        newd1y = d1y * expInfo['ratio_monitor2CRT'];
        newd2x = d2x * expInfo['ratio_monitor2CRT'];
        newd2y = d2y * expInfo['ratio_monitor2CRT'];
        newd3x = d3x * expInfo['ratio_monitor2CRT'];
        newd3y = d3y * expInfo['ratio_monitor2CRT'];
        newd4x = d4x * expInfo['ratio_monitor2CRT'];
        newd4y = d4y * expInfo['ratio_monitor2CRT'];
        newd5x = d5x * expInfo['ratio_monitor2CRT'];
        newd5y = d5y * expInfo['ratio_monitor2CRT'];
        newd6x = d6x * expInfo['ratio_monitor2CRT'];
        newd6y = d6y * expInfo['ratio_monitor2CRT'];
        newd7x = d7x * expInfo['ratio_monitor2CRT'];
        newd7y = d7y * expInfo['ratio_monitor2CRT'];
        newd8x = d8x * expInfo['ratio_monitor2CRT'];
        newd8y = d8y * expInfo['ratio_monitor2CRT'];
        newd9x = d9x * expInfo['ratio_monitor2CRT'];
        newd9y = d9y * expInfo['ratio_monitor2CRT'];
        newd10x = d10x * expInfo['ratio_monitor2CRT'];
        newd10y = d10y * expInfo['ratio_monitor2CRT'];
        newd11x = d11x * expInfo['ratio_monitor2CRT'];
        newd11y = d11y * expInfo['ratio_monitor2CRT'];

        # hint text location rescale
        hintlocation = 255*expInfo['ratio_monitor2CRT'];
      End Routine:
        thisExp.addData('letterSize',lettersize);
        thisExp.addData('apertureSize',aperturesize);
        thisExp.addData('searchsize',searchsize);
    PolygonComponent background_2
      fillColor = gray
      shape = rectangle
      size [set every repeat] = (searchsize, searchsize)
      startVal [time (s)] = 0.0
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    ImageComponent imageT_2
      image = T.png
      interpolate = nearest
      ori [set every repeat] = targOrientdeg
      pos [set every repeat] = (newtlocx, newtlocy)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL1_2
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d1Orient
      pos [set every repeat] = (newd1x,newd1y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL2_2
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d2Orient
      pos [set every repeat] = (newd2x,newd2y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL3_2
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d3Orient
      pos [set every repeat] = (newd3x,newd3y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL4_2
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d4Orient
      pos [set every repeat] = (newd4x,newd4y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL5_2
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d5Orient
      pos [set every repeat] = (newd5x,newd5y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL6_2
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d6Orient
      pos [set every repeat] = (newd6x,newd6y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL7_2
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d7Orient
      pos [set every repeat] = (newd7x,newd7y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL8_2
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d8Orient
      pos [set every repeat] = (newd8x,newd8y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL9_2
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d9Orient
      pos [set every repeat] = (newd9x,newd9y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL10_2
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d10Orient
      pos [set every repeat] = (newd10x,newd10y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL11_2
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d11Orient
      pos [set every repeat] = (newd11x,newd11y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageAperture_2
      image = plainBackground.png
      mask = circleMask.png
      pos [set every frame] = mouselocation
      size [set every repeat] = (aperturesize, aperturesize)
      startVal [time (s)] = $startApertureTime
      texture resolution = 512
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    ImageComponent CenterAperture_2
      image = plainBackground.png
      mask = circleMask.png
      pos [set every repeat] = [0, 0]
      size [set every repeat] = (aperturesize, aperturesize)
      startVal [time (s)] = $startApertureTime
      stopVal [duration (frames)] = 1
      texture resolution = 512
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    KeyboardComponent key_respRT
      allowedKeys = 'y','n'
      correctAns = $corrAnswer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
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    TextComponent adjustHint_text
      letterHeight = 24
      pos [set every repeat] = (0, hintlocation)
      saveStartStop = False
      startVal [time (s)] = $searchHintStartTime
      text [set every repeat] = $searchHintText
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  Routine TakeABreak2
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    CodeComponent code_break2
      Code Type = Auto->JS
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      Begin Experiment:
        sumcorr = 0;
        avgcorr = 0;
        sumrt = 0;
        avgrt = 0;
        accfbcolor = 'white';
        rtfbcolor = 'white';
        accfbtext = "na";
        rtfbtext = "na";
      Begin Routine:
        remainingblock = 4-block;
        breakTime = 16;
          # take a break for every block
        if trial % breakTime == 0:
            continueRoutine = True;
            sumcorr = sumcorr + key_respTesting.corr;
            sumrt = sumrt + key_respTesting.rt;
            avgcorr = 100*(sumcorr/breakTime);
            avgrt = sumrt/breakTime;
            if avgcorr > 90:
                accfbcolor = 'green';
                accfbtext = "Your accuracy during the last block was " + str(round(avgcorr,2)) + "%. Good job!";
            else:
                accfbcolor = 'red';
                accfbtext = "Your accuracy during the last block was only " + str(round(avgcorr,2)) + "%. Please try to be accurate.";
            if avgrt < 4.0:
                rtfbcolor = 'green';
                rtfbtext = "It took you an average of " + str(round(avgrt,2)) + "s to respond to the letter T. Good job!";
            else:
                rtfbcolor = 'red';
                rtfbtext = "It took you an average of " + str(round(avgrt,2)) + "s to respond to the letter T. Please try to be faster.";
            sumcorr = 0;
            sumrt = 0;
        else:
            sumcorr = sumcorr + key_respTesting.corr;
            sumrt = sumrt + key_respTesting.rt;
            continueRoutine = False;
        # no break instruction for last block
        if remainingblock == 0:
            continueRoutine = False;
    TextComponent accText
      color = $accfbcolor
      letterHeight = 24
      pos = (0, 120)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $accfbtext
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    TextComponent rtText
      color = $rtfbcolor
      letterHeight = 24
      pos = (0, 60)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $rtfbtext
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    TextComponent TextBreak
      letterHeight = 24
      pos = (0, -50)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        There are 24 blocks altogether. The number of remaining blocks is:


        Press spacebar to continue.
    TextComponent textblockRemaining
      letterHeight = 24
      pos [set every frame] = (0, -65)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $remainingblock
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    KeyboardComponent key_RespBreak
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine displayTestingPhase
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    CodeComponent code_initial_3
      Code Type = Auto->JS
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      Begin Experiment:
        # initial letter size
        # letter: 1 degree in CRT (57cm away)
        lettersize = 28;
        # initial aperture size
        aperturesize = 8000;
        # intial search window size
        searchsize = 482;
        # initial letter location
        newtlocx = 0;
        newtlocy = 0;
        newd1x = 0;
        newd1y = 0;
        newd2x = 0;
        newd2y = 0;
        newd3x = 0;
        newd3y = 0;
        newd4x = 0;
        newd4y = 0;
        newd5x = 0;
        newd5y = 0;
        newd6x = 0;
        newd6y = 0;
        newd7x = 0;
        newd7y = 0;
        newd8x = 0;
        newd8y = 0;
        newd9x = 0;
        newd9y = 0;
        newd10x = 0;
        newd10y = 0;
        newd11x = 0;
        newd11y = 0;
        # intial hint text location
        hintlocation = 255;
      Begin Routine:
        win.mouseVisible = True; # show cursor
        # initial first location to center
        mouselocation = [0, 0];
        whichframe = 0;
        # create empty list to save mouse location
        mouselocationlistx = [];
        mouselocationlisty = [];
        whichframelist = [];


        startApertureTime = 10000;


        # letter size
        lettersize = 28*expInfo['ratio_monitor2CRT'];
        # aperture size
        aperturesize = 8000*expInfo['ratio_monitor2CRT'];
        # rescale search window size
        searchsize = 482*expInfo['ratio_monitor2CRT'];
        # rescale letter location
        newtlocx = tlocx * expInfo['ratio_monitor2CRT'];
        newtlocy = tlocy * expInfo['ratio_monitor2CRT'];
        newd1x = d1x * expInfo['ratio_monitor2CRT'];
        newd1y = d1y * expInfo['ratio_monitor2CRT'];
        newd2x = d2x * expInfo['ratio_monitor2CRT'];
        newd2y = d2y * expInfo['ratio_monitor2CRT'];
        newd3x = d3x * expInfo['ratio_monitor2CRT'];
        newd3y = d3y * expInfo['ratio_monitor2CRT'];
        newd4x = d4x * expInfo['ratio_monitor2CRT'];
        newd4y = d4y * expInfo['ratio_monitor2CRT'];
        newd5x = d5x * expInfo['ratio_monitor2CRT'];
        newd5y = d5y * expInfo['ratio_monitor2CRT'];
        newd6x = d6x * expInfo['ratio_monitor2CRT'];
        newd6y = d6y * expInfo['ratio_monitor2CRT'];
        newd7x = d7x * expInfo['ratio_monitor2CRT'];
        newd7y = d7y * expInfo['ratio_monitor2CRT'];
        newd8x = d8x * expInfo['ratio_monitor2CRT'];
        newd8y = d8y * expInfo['ratio_monitor2CRT'];
        newd9x = d9x * expInfo['ratio_monitor2CRT'];
        newd9y = d9y * expInfo['ratio_monitor2CRT'];
        newd10x = d10x * expInfo['ratio_monitor2CRT'];
        newd10y = d10y * expInfo['ratio_monitor2CRT'];
        newd11x = d11x * expInfo['ratio_monitor2CRT'];
        newd11y = d11y * expInfo['ratio_monitor2CRT'];

        # hint text location rescale
        hintlocation = 255*expInfo['ratio_monitor2CRT'];
      End Routine:
        thisExp.addData('letterSize',lettersize);
        thisExp.addData('apertureSize',aperturesize);
        thisExp.addData('searchsize',searchsize);
    PolygonComponent background_3
      fillColor = gray
      shape = rectangle
      size [set every repeat] = (searchsize, searchsize)
      startVal [time (s)] = 0.0
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    ImageComponent imageT_3
      image = T.png
      interpolate = nearest
      ori [set every repeat] = targOrientdeg
      pos [set every repeat] = (newtlocx, newtlocy)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL1_3
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d1Orient
      pos [set every repeat] = (newd1x,newd1y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL2_3
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d2Orient
      pos [set every repeat] = (newd2x,newd2y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL3_3
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d3Orient
      pos [set every repeat] = (newd3x,newd3y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL4_3
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d4Orient
      pos [set every repeat] = (newd4x,newd4y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL5_3
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d5Orient
      pos [set every repeat] = (newd5x,newd5y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL6_3
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d6Orient
      pos [set every repeat] = (newd6x,newd6y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL7_3
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d7Orient
      pos [set every repeat] = (newd7x,newd7y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL8_3
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d8Orient
      pos [set every repeat] = (newd8x,newd8y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL9_3
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d9Orient
      pos [set every repeat] = (newd9x,newd9y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL10_3
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d10Orient
      pos [set every repeat] = (newd10x,newd10y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageL11_3
      image = L.png
      interpolate = nearest
      ori [set every repeat] = $d11Orient
      pos [set every repeat] = (newd11x,newd11y)
      saveStartStop = False
      size [set every repeat] = (lettersize, lettersize)
      startVal [time (s)] = 0
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    ImageComponent imageAperture_3
      image = plainBackground.png
      mask = circleMask.png
      pos [set every frame] = mouselocation
      size [set every repeat] = (aperturesize, aperturesize)
      startVal [time (s)] = $startApertureTime
      texture resolution = 512
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    ImageComponent CenterAperture_3
      image = plainBackground.png
      mask = circleMask.png
      pos [set every repeat] = [0, 0]
      size [set every repeat] = (aperturesize, aperturesize)
      startVal [time (s)] = $startApertureTime
      stopVal [duration (frames)] = 1
      texture resolution = 512
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    KeyboardComponent key_respTesting
      allowedKeys = 'a','s'
      correctAns = $corrAnswer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
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    CodeComponent code_ending
      Code Type = Auto->JS
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      Each Frame:
        if whichframe >= 1:
            mouselocation = mouseeye.getPos();
        whichframe = whichframe + 1;
        # save mouse location and which frame
        mouselocationlistx.append(mouselocation[0]);
        mouselocationlisty.append(mouselocation[1]);
        whichframelist.append(whichframe);
        thisExp.addData('mouselocationlistx', mouselocationlistx);
        thisExp.addData('mouselocationlisty', mouselocationlisty);
        thisExp.addData('whichframe', whichframelist);
      End Routine:
        mouselocation = [0, 0];
        if key_respTesting.corr == 1:
            fbtext = 'correct!'
            fbcolor = 'green';
            fbdur = .2;
        else:
            fbtext = 'incorrect!'
            fbcolor = 'red';
            fbdur = 4;
Flow
  Routine InstrStartPage
  Routine VirtualChinrest
  Routine InstrRedo
  Routine VirtualChinrestRedo
  Routine Instruction1
  LoopInitiator keyPracLoop loopType="TrialHandler"
    conditionsFile = Seq_keyprac.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'phase': 'practice', 'block': 1, 'trial': 1, 'targOrientdeg': 0, 'targOrient': 'left', 'corrAnswer': 'a'},
      {'phase': 'practice', 'block': 1, 'trial': 2, 'targOrientdeg': 0, 'targOrient': 'left', 'corrAnswer': 'a'},
      {'phase': 'practice', 'block': 1, 'trial': 3, 'targOrientdeg': 0, 'targOrient': 'left', 'corrAnswer': 'a'},
      {'phase': 'practice', 'block': 1, 'trial': 4, 'targOrientdeg': 180, 'targOrient': 'right', 'corrAnswer': 's'},
      {'phase': 'practice', 'block': 1, 'trial': 5, 'targOrientdeg': 180, 'targOrient': 'right', 'corrAnswer': 's'},
      {'phase': 'practice', 'block': 1, 'trial': 6, 'targOrientdeg': 0, 'targOrient': 'left', 'corrAnswer': 'a'},
      {'phase': 'practice', 'block': 1, 'trial': 7, 'targOrientdeg': 180, 'targOrient': 'right', 'corrAnswer': 's'},
      {'phase': 'practice', 'block': 1, 'trial': 8, 'targOrientdeg': 0, 'targOrient': 'left', 'corrAnswer': 'a'},
      {'phase': 'practice', 'block': 1, 'trial': 9, 'targOrientdeg': 180, 'targOrient': 'right', 'corrAnswer': 's'},
      {'phase': 'practice', 'block': 1, 'trial': 10, 'targOrientdeg': 180, 'targOrient': 'right', 'corrAnswer': 's'},
      {'phase': 'practice', 'block': 1, 'trial': 11, 'targOrientdeg': 0, 'targOrient': 'left', 'corrAnswer': 'a'},
      {'phase': 'practice', 'block': 1, 'trial': 12, 'targOrientdeg': 180, 'targOrient': 'right', 'corrAnswer': 's'},
      {'phase': 'practice', 'block': 1, 'trial': 13, 'targOrientdeg': 0, 'targOrient': 'left', 'corrAnswer': 'a'}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
    Routine keyPractice
    Routine keyPracFeedback
  LoopTerminator keyPracLoop
  Routine Instruction2
  Routine Instruction3
  LoopInitiator trialsPractice loopType="TrialHandler"
    conditionsFile = Seq_practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'phase': 'practice', 'block': 0, 'trial': 1, 'targetQuad': 4, 'Tcondition': 'sparse', 'targOrientdeg': 0, 'targOrient': 'left', 'corrAnswer': 'a', 'targcell': 90, 'tlocx': 217, 'tlocy': -164, 'd1x': 68, 'd1y': 123, 'd2x': 222, 'd2y': 26, 'd3x': 214, 'd3y': 216, 'd4x': -218, 'd4y': 159, 'd5x': -120, 'd5y': 223, 'd6x': -110, 'd6y': 82, 'd7x': -115, 'd7y': -130, 'd8x': -224, 'd8y': -120, 'd9x': -68, 'd9y': -219, 'd10x': 79, 'd10y': -175, 'd11x': 19, 'd11y': -128, 'd1Orient': 90, 'd2Orient': 270, 'd3Orient': 360, 'd4Orient': 90, 'd5Orient': 270, 'd6Orient': 270, 'd7Orient': 180, 'd8Orient': 90, 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,
      {'phase': 'practice', 'block': 0, 'trial': 2, 'targetQuad': 1, 'Tcondition': 'rich', 'targOrientdeg': 0, 'targOrient': 'left', 'corrAnswer': 'a', 'targcell': 39, 'tlocx': 169, 'tlocy': 66, 'd1x': -126, 'd1y': 125, 'd2x': -169, 'd2y': 169, 'd3x': -130, 'd3y': 19, 'd4x': -169, 'd4y': -116, 'd5x': -125, 'd5y': -167, 'd6x': -224, 'd6y': -216, 'd7x': 218, 'd7y': -129, 'd8x': 171, 'd8y': -218, 'd9x': 18, 'd9y': -208, 'd10x': 166, 'd10y': 26, 'd11x': 17, 'd11y': 170, 'd1Orient': 180, 'd2Orient': 90, 'd3Orient': 360, 'd4Orient': 270, 'd5Orient': 90, 'd6Orient': 90, 'd7Orient': 90, 'd8Orient': 270, 'd9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,
      {'phase': 'practice', 'block': 0, 'trial': 3, 'targetQuad': 2, 'Tcondition': 'sparse', 'targOrientdeg': 0, 'targOrient': 'left', 'corrAnswer': 'a', 'targcell': 22, 'tlocx': -162, 'tlocy': 126, 'd1x': 222, 'd1y': 26, 'd2x': 17, 'd2y': 170, 'd3x': 126, 'd3y': 172, 'd4x': -25, 'd4y': -117, 'd5x': -175, 'd5y': -206, 'd6x': -224, 'd6y': -216, 'd7x': 116, 'd7y': -19, 'd8x': 130, 'd8y': -174, 'd9x': 217, 'd9y': -164, 'd10x': -218, 'd10y': 159, 'd11x': -21, 'd11y': 162, 'd1Orient': 90, 'd2Orient': 90, 'd3Orient': 180, 'd4Orient': 360, 'd5Orient': 360, 'd6Orient': 270, 'd7Orient': 360, 'd8Orient': 360,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,
      {'phase': 'practice', 'block': 0, 'trial': 4, 'targetQuad': 4, 'Tcondition': 'sparse', 'targOrientdeg': 180, 'targOrient': 'right', 'corrAnswer': 's', 'targcell': 76, 'tlocx': 19, 'tlocy': -128, 'd1x': 159, 'd1y': 121, 'd2x': 214, 'd2y': 216, 'd3x': 219, 'd3y': 165, 'd4x': -218, 'd4y': 159, 'd5x': -162, 'd5y': 126, 'd6x': -219, 'd6y': 119, 'd7x': -169, 'd7y': -116, 'd8x': -111, 'd8y': -31, 'd9x': -175, 'd9y': -206, 'd10x': 18, 'd10y': -208, 'd11x': 81, 'd11y': -114, 'd1Orient': 90, 'd2Orient': 270, 'd3Orient': 180, 'd4Orient': 180, 'd5Orient': 270, 'd6Orient': 180, 'd7Orient': 360, 'd8Orient':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
    Routine fixation
    Routine greenFixation
    Routine trial
    Routine trialFeedback
    Routine Instruction4
    Routine Instruction5
  LoopTerminator trialsPractice
  Routine CheckInstr
  Routine CheckInstr_FB
  Routine Instruction_MainExp
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $parameterfile
    loopType = sequential
    nReps = 1
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    Routine fixation
    Routine greenFixation
    Routine trial
    Routine trialFeedback
    Routine TakeABreak
  LoopTerminator trials
  LoopInitiator trialsTesting loopType="TrialHandler"
    conditionsFile = $testingfile
    loopType = sequential
    nReps = 1
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    Routine fixation
    Routine greenFixation
    Routine displayTestingPhase
    Routine trialFeedback
    Routine TakeABreak2
  LoopTerminator trialsTesting
  Routine RecogQuestion
  Routine Disclose
  Routine InstrRT_2
  LoopInitiator RT loopType="TrialHandler"
    conditionsFile = $rtfile
    loopType = sequential
    nReps = 1
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    Routine fixation_RT
    Routine displayRT
  LoopTerminator RT
  Routine EndOfExperiment
